PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = numcomp2
  Screen = 1
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Routines
  Routine trial
    ImageComponent image
      startVal [time (s)] = .51
      image [set every repeat] = $stimFile
      size = (1.3, 1)
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = .52
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  Routine Instructions
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        ok!

        Using the LEFT and RIGHT
        arrow keys please indicate
        which side of the screen
        has more objects.
    KeyboardComponent ok_to_go
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = tbtstimpy.csv
    loopType = random
    nReps = 1
    Selected rows = [3,4,6]
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    conditions:
      [OrderedDict([(u'Number1', 10), (u'Number2', 11), (u'Sum', 21), (u'Ratio', 1.1), (u'stimFile', u'/py_numcom_stimtbtstim1.png'), (u'Larger_side', u'left')]),
      OrderedDict([(u'Number1', 10), (u'Number2', 11), (u'Sum', 21), (u'Ratio', 1.1), (u'stimFile', u'/py_numcom_stimtbtstim2.png'), (u'Larger_side', u'left')]),
      OrderedDict([(u'Number1', 20), (u'Number2', 22), (u'Sum', 42), (u'Ratio', 1.1), (u'stimFile', u'/py_numcom_stimtbtstim3.png'), (u'Larger_side', u'left')]),
      OrderedDict([(u'Number1', 20), (u'Number2', 22), (u'Sum', 42), (u'Ratio', 1.1), (u'stimFile', u'/py_numcom_stimtbtstim4.png'), (u'Larger_side', u'left')]),
      OrderedDict([(u'Number1', 30), (u'Number2', 33), (u'Sum', 63), (u'Ratio', 1.1), (u'stimFile', u'/py_numcom_stimtbtstim5.png'), (u'Larger_side', u'left')]),
      OrderedDict([(u'Number1', 30), (u'Number2', 33), (u'Sum', 63), (u'Ratio', 1.1), (u'stimFile', u'/py_numcom_stimtbtstim6.png'), (u'Larger_side', u'left')]),
      OrderedDict([(u'Number1', 15), (u'Number2', 18), (u'Sum', 33), (u'Ratio', 1.2), (u'stimFile', u'/py_numcom_stimtbtstim7.png'), (u'Larger_side', u'left')]),
      OrderedDict([(u'Number1', 15), (u'Number2', 18), (u'Sum', 33), (u'Ratio', 1.2), (u'stimFile', u'/py_numcom_stimtbtstim8.png'), (u'Larger_side', u'left')]),
      OrderedDict([(u'Number1', 25), (u'Number2', 30), (u'Sum', 55), (u'Ratio', 1.2), (u'stimFile', u'/py_numcom_stimtbtstim9.png'), (u'Larger_side', u'left')])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
    Routine trial
  LoopTerminator trials
